# Test scoring in geometry of particle passing through a foil to a cylinder

s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

s:Ge/Foil/Type     = "TsBox"
s:Ge/Foil/Parent   = "World"
s:Ge/Foil/Material = "Lead"
d:Ge/Foil/HLX      = 30.0 cm
d:Ge/Foil/HLY      = 30.0 cm
d:Ge/Foil/HLZ      = .5 cm
d:Ge/Foil/TransX   = 0. cm
d:Ge/Foil/TransY   = 0. cm
d:Ge/Foil/TransZ   = -10. cm
d:Ge/Foil/RotX     = 0. deg
d:Ge/Foil/RotY     = 0. deg
d:Ge/Foil/RotZ     = 0. deg
s:Ge/Foil/Color    = "blue"
i:Ge/Foil/XBins    = 1
i:Ge/Foil/YBins    = 1
i:Ge/Foil/ZBins    = 1

s:Ge/Cylinder/Type     = "TsSphere"
s:Ge/Cylinder/Parent   = "World"
s:Ge/Cylinder/Material = "Vacuum"
d:Ge/Cylinder/RMin     = 50.0 cm
d:Ge/Cylinder/RMax     = 55.0 cm
d:Ge/Cylinder/SPhi     = 20.0 deg
d:Ge/Cylinder/DPhi     = 100. deg
d:Ge/Cylinder/HL       = 50. cm
d:Ge/Cylinder/TransX   = 0. cm
d:Ge/Cylinder/TransY   = 0. cm
d:Ge/Cylinder/TransZ   = -30. cm
d:Ge/Cylinder/RotX     = 0. deg
d:Ge/Cylinder/RotY     = 0. deg
d:Ge/Cylinder/RotZ     = 0. deg
s:Ge/Cylinder/Color    = "blue"
i:Ge/Cylinder/RhoBins    = 1
i:Ge/Cylinder/PhiBins    = 1

s:Sc/MyScorer/Quantity                              = "SurfaceTrackCount"
s:Sc/MyScorer/Surface                               = "Cylinder/OuterCurvedSurface"
b:Sc/MyScorer/OutputToConsole                       = "True"
s:Sc/MyScorer/OutputType                            = "csv"
s:Sc/MyScorer/IfOutputFileAlreadyExists             = "Overwrite"
#i:Sc/MyScorer/EBins                                = 10
s:Sc/MyScorer/OnlyIncludeParticlesGoing             = "Out"
#sv:Sc/MyScorer/OnlyIncludeParticlesNamed           = 1 "gamma"
s:Sc/MyScorer/OnlyIncludeParticlesOfGeneration      = "secondary"
#d:Sc/MyScorer/EBinMin                              = 0. MeV
d:Sc/MyScorer/EBinMax                               = 110. MeV
#d:Sc/MyScorer/OnlyIncludeIfIncidentParticleKEAbove = 0 MeV
sv:Sc/MyScorer/Report = 1 "Mean"
#i:Sc/MyScorer/TimeBins = 10
#d:Sc/MyScorer/TimeBinMin = 0. ns
#d:Sc/MyScorer/TimeBinMax = 100. ns

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 169.23 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.65 cm
d:So/Example/BeamPositionSpreadY      = 0.65 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 10